<ReactionScheme>
  <!-- fit 662 -->
<!-- First version of merges Gq Gs coupled pathway reactions
     when reactions differ between the models, notes indicate which was source.
     Either StriatumCRCNS/StochasticSP1/MSPNfinalxml/MSPNreactions_4spine_new50.xml for Gs
     or MURI/BoHung/FinalMarch2012/mglu_2ag_reac12mar20desens025.xml for Gq
phosphatase reactions take from revision of Gs to improve Ca dep dphos of Dp32-->

<!-- Molecules species and diffusion constants -->
<!-- source Avrama's eLife ERK paper: https://doi.org/10.7554/eLife.64644  -->

<!-- calcium reaction subset, to adjust for proper basal calcium -->
<!-- pKal pathway  -->
<!-- CaM from Gq files, with either C or N site binding first to CK and PP2B -->
    <Specie name="CaM"               id="CaM"               kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CaMCa2C"           id="CaMCa2C"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CaMCa2N"           id="CaMCa2N"           kdiff="11"    kdiffunit="mu2/s"/>
    <Specie name="CaMCa4"            id="CaMCa4"            kdiff="11"    kdiffunit="mu2/s"/>
    
    <Specie name="CK"                                  id="CK"                    kdiff="0.32"     kdiffunit="mu2/s"/>
    <Specie name="CKp"                                 id="CKp"                   kdiff="0.017"     kdiffunit="mu2/s"/>
    <Specie name="CKCaMCa4"                            id="CKCaMCa4"              kdiff="0.017"     kdiffunit="mu2/s"/>
    <Specie name="CKpCaMCa4"                           id="CKpCaMCa4"             kdiff="0.017"     kdiffunit="mu2/s"/>
    <Specie name="Complex"        id="Complex"       kdiff="0"     kdiffunit="mu2/s"/>
    <Specie name="pComplex" id="pComplex" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="PP1"                                 id="PP1"               kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="CKpPP1"                              id="CKpPP1"            kdiff="0"    kdiffunit="mu2/s"/>
    <Specie name="CKpCaMCa4PP1"                        id="CKpCaMCa4PP1"      kdiff="0"    kdiffunit="mu2/s"/>
	


<!-- Calcium binding -->


<!--1A) CaM  + 2Ca <-> CaMCa2C GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMC_bind" id="CaMC_bind">
	<Reactant specieID="CaM"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa2C"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>
	
    </Reaction>
  
<!--2A) CaMCa2C  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMCa2C_bind" id="CaMCa2C_bind">
	<Reactant specieID="CaMCa2C"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa4"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>
	
    </Reaction>

<!--1B) CaM  + 2Ca <-> CaMCa2N GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMN_bind" id="CaMN_bind">
	<Reactant specieID="CaM"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa2N"/>

	<forwardRate>0.1e-3</forwardRate>
	<reverseRate>1000e-3</reverseRate>

    </Reaction>

<!--2B) CaMCa2N  + 2Ca <-> CaMCa4 GQ RXN FILE, C or N can bind first-->
    <Reaction name = "CaMCa2N_bind" id="CaMCa2N_bind">
	<Reactant specieID="CaMCa2N"/>
	<Reactant specieID="Ca" n="2"/>
	<Product specieID="CaMCa4"/>

	<forwardRate>6e-6</forwardRate>
	<reverseRate>9.1e-3</reverseRate>

    </Reaction>

<!--XII. *************** CaMKII ************* -->

  <!--1) CaMCa4 + CK <-> CKCaMCa4  -->
    <Reaction name = "CK bind" id="CK_bind">
        <Reactant specieID="CaMCa4"                 />
        <Reactant specieID="CK"                     />
        <Product  specieID="CKCaMCa4"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 3e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
        
    </Reaction>

<!--2a) CKCaMCa4 + CKCaMCa4 <-> Complex -->
    <Reaction name = "CKCaM bind" id="CKCaM_bind">
        <Reactant specieID="CKCaMCa4"  power="2"        />
        <Product  specieID="Complex"                />

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 10e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<!--2b) CKpCaMCa4 + CKCaMCa4 <-> pComplex -->
    <Reaction name = "pComplex bind" id="pComplex_bind">
        <Reactant specieID="CKpCaMCa4"              />
        <Reactant specieID="CKCaMCa4"               />
        <Product  specieID="pComplex"               />

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 10e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>
<!--3a) CKpCaMCa4 + Complex <-> CKpCaMCa4 + pComplex -->
    <Reaction name = "CKpCaMCompl bind" id="CKpCaMCompl_bind">
        <Reactant specieID="CKpCaMCa4"              />
        <Reactant specieID="Complex"                />
        <Product  specieID="CKpCaMCa4"              />
        <Product  specieID="pComplex"               />

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>

<!--3b) CKCaMCa4 + Complex <-> CKCaMCa4 + pComplex -->
    <Reaction name = "CKCaMCompl bind" id="CKCaMCompl_bind">
        <Reactant specieID="CKCaMCa4"               />
        <Reactant specieID="Complex"                />
        <Product  specieID="CKCaMCa4"               />
        <Product  specieID="pComplex"               />

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>
    
 <!--4a) Complex + Complex <-> Complex + Pcomplex -->
    <Reaction name = "2Complex bind" id="2Complex_bind">
        <Reactant specieID="Complex"    power="2"       />
        <Product  specieID="Complex"                />
        <Product  specieID="pComplex"               />

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>

 <!--4b) Complex + pComplex <-> pComplex + pComplex-->
    <Reaction name = "ComplpCompl bind" id="ComplpCompl_bind">
        <Reactant specieID="Complex"                />
        <Reactant specieID="pComplex"               />
        <Product  specieID="pComplex"   power="2"        />

        <forwardRate> 0.03e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>


    
    <!-- CKpCaMCa4 <-> CKp + CaMCa4 -->
    <Reaction name = "CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"              />
        <Product  specieID="CaMCa4"                 />
        <Product  specieID="CKp"                    />

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<!-- Km=5.1 uM  from foulkes et. al.,  et al., Eur. JBiochem.1983 132(309-313))
     Vmax=5.7 umol/min gives kcat=3.5 sec-1 & kb=14 sec-1 -->
    <!-- kf=0.000039,kb=0.34,kcat=0.086 /sec for CKp only from Myungs paper 2010 PloS -->
    <!-- kf=0.6e-9,kb=0.34e-3,kcat=0.086e-3 /msec for CKp and CKpCaM from Myungs Stoch sims-->
   <!-- CKp + PP1 <-> CKpPP1 --> 
    <Reaction name = "CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpPP1 -> PP1 + CK -->
    <Reaction name = "CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

  
   <!-- CKpCaMCa4 + PP1 <-> CKpCaMCa4PP1 -->
    <Reaction name = "CKpCaMPP1_bind" id="CKpCaMPP1_bind">
	<Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCaMCa4PP1"/>

	
    <forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <!-- CKpCaMCa4PP1 -> PP1 + CKCaMCa4 -->
    
    <Reaction name = "CKpCaMPP1_reac" id="CKpCaMPP1_reac">
	<Reactant specieID="CKpCaMCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCaMCa4"/>

<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

    <!-- PP1 inhibitor -->
    
	
</ReactionScheme>
