<?xml version="1.0" encoding="utf-8"?>
<!-- with no CaM, Ca affinity to RyR2 of 1 uM fits much better. For RyR2CaM Ca affinity should probably 2 uM or 4 uM -->
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="200" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>

  <Specie name="RyR2" id="RyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaM" id="RyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa2C" id="RyR2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa2N" id="RyR2CaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2CaMCa4" id="RyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="CaRyR2" id="CaRyR2" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaM" id="CaRyR2CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaMCa2C" id="CaRyR2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaMCa2N" id="CaRyR2CaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaRyR2CaMCa4" id="CaRyR2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>



  <Reaction name="RyR2Ca1" id="RyR2Ca1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>
  
  <Reaction name="RyR2CaMCa1" id="RyR2CaMCa1">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaMCa2CCa1" id="RyR2CaMCa2CCa1">
    <Reactant specieID="RyR2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaMCa2C"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaMCa2NCa1" id="RyR2CaMCa2NCa1">
    <Reactant specieID="RyR2CaMCa2N"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaMCa2N"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  <Reaction name="RyR2CaMCa4Ca1" id="RyR2CaMCa4Ca1">
    <Reactant specieID="RyR2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>1.e-3</forwardRate>
    <reverseRate>1.</reverseRate>
  </Reaction>

  
  <Reaction name="CaM_Ca2C" id="CaM_Ca2C">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaM_Ca2N" id="CaM_Ca2N">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa2N"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaMCa2C_Ca2N" id="CaMCa2C_Ca2N">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaMCa2N_Ca2C" id="CaMCa2N_Ca2C">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>


  
  <Reaction name="RyR22_CaM_1" id="RyR2_CaM_1">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="RyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025e-5</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  
   <Reaction name="RyR2_CaMCa2C_2" id="RyR2_CaMCa2C_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="RyR2CaMCa2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.00020555555555555556</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="RyR2_CaMCa2N_2" id="RyR2_CaMCa2N_2">
    <Reactant specieID="RyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="RyR2CaMCa2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.00020555555555555556</reverseRate>
    <Q10>.2</Q10>
   </Reaction>


   <Reaction name="RyR2_CaMCa4_3" id="RyR2_CaMCa4_3">
     <Reactant specieID="RyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="RyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.118852459016394e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

    <Reaction name="RyR2CaM_Ca2C" id="RyR2CaM_Ca2C">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2CaM_Ca2N" id="RyR2CaM_Ca2N">
    <Reactant specieID="RyR2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2CaMCa2N"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639e-1</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2CaMCa2C_Ca2N" id="RyR2CaMCa2C_Ca2N">
    <Reactant specieID="RyR2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639e-1</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="RyR2CaMCa2N_Ca2C" id="RyR2CaMCa2N_Ca2C">
    <Reactant specieID="RyR2CaMCa2N"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="RyR2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>


  <Reaction name="CaRyR22_CaM_1" id="CaRyR2_CaM_1">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaM"/>
    <Product specieID="CaRyR2CaM"/>
    <forwardRate>1.25e-6</forwardRate>
    <reverseRate>0.001025e-5</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  
   <Reaction name="CaRyR2_CaMCa2C_2" id="CaRyR2_CaMCa2C_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2C"/>
    <Product specieID="CaRyR2CaMCa2C"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.00020555555555555556</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

   <Reaction name="CaRyR2_CaMCa2N_2" id="CaRyR2_CaMCa2N_2">
    <Reactant specieID="CaRyR2"/>
    <Reactant specieID="CaMCa2N"/>
    <Product specieID="CaRyR2CaMCa2N"/>
    <forwardRate>2.5e-6</forwardRate>
    <reverseRate>0.00020555555555555556</reverseRate>
    <Q10>.2</Q10>
   </Reaction>


   <Reaction name="CaRyR2_CaMCa4_3" id="CaRyR2_CaMCa4_3">
     <Reactant specieID="CaRyR2"/>
     <Reactant specieID="CaMCa4"/>
     <Product specieID="CaRyR2CaMCa4"/>
     <forwardRate>5.e-6</forwardRate>
     <reverseRate>4.118852459016394e-05</reverseRate>
    <Q10>.2</Q10>
   </Reaction>

    <Reaction name="CaRyR2CaM_Ca2C" id="CaRyR2CaM_Ca2C">
    <Reactant specieID="CaRyR2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaRyR2CaMCa2C"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2CaM_Ca2N" id="CaRyR2CaM_Ca2N">
    <Reactant specieID="CaRyR2CaM"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaRyR2CaMCa2N"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639e-1</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2CaMCa2C_Ca2N" id="CaRyR2CaMCa2C_Ca2N">
    <Reactant specieID="CaRyR2CaMCa2C"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>2.62e-08</forwardRate>
    <reverseRate>3.639e-1</reverseRate>
    <Q10>.2</Q10>
  </Reaction>

  <Reaction name="CaRyR2CaMCa2N_Ca2C" id="CaRyR2CaMCa2N_Ca2C">
    <Reactant specieID="CaRyR2CaMCa2N"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="CaRyR2CaMCa4"/>
    <forwardRate>1.62e-07</forwardRate>
    <reverseRate>0.0438</reverseRate>
    <Q10>.2</Q10>
  </Reaction>



   

   
</ReactionScheme>
