<ReactionScheme><Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="CaOut" id="CaOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="CaOutLeak" id="CaOutLeak" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Leak" id="Leak" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="fixedbuffer" id="fixedbuffer" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="fixedbufferCa" id="fixedbufferCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Calbin" id="Calbin" kdiff="9.3" kdiffunit="mu2/s"/>
  <Specie name="CalbinC" id="CalbinC" kdiff="9.3" kdiffunit="mu2/s"/>
  
 
  <Specie name="ncx" id="ncx" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="ncxCa" id="ncxCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1a" id="pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="pmca1aCa" id="pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1a" id="CaMCa4pmca1a" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4pmca1aCa" id="CaMCa4pmca1aCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaMpmca1a" id="CaMpmca1a" kdiff="0" kdiffunit="mu2/s"/> 

  <Specie name="Ng" id="Ng" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NgCaM" id="NgCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CaM" id="CaM" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2C" id="CaMCa2C" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa2N" id="CaMCa2N" kdiff="4" kdiffunit="mu2/s"/>
  <Specie name="CaMCa4" id="CaMCa4" kdiff="4" kdiffunit="mu2/s"/>
  <Reaction name="Ca_pump1a_1" id="Ca_pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="pmca1aCa"/>

    <forwardRate>10e-6</forwardRate>
    <reverseRate>50e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_pump1a_2" id="Ca_pump1a_2">
    <Reactant specieID="pmca1aCa"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>12e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="Ca_CaMCa4pump1a_1" id="Ca_CaMCa4pump1a_1">
    <Reactant specieID="Ca"/>
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMCa4pmca1aCa"/>

    <forwardRate>50e-6</forwardRate>
    <reverseRate>10e-3</reverseRate>
  </Reaction>

 
  <Reaction name="Ca_CaMCa4pump1a_2" id="Ca_CaMCa4pump1a_2">
    <Reactant specieID="CaMCa4pmca1aCa"/>
    <Product specieID="CaMCa4pmca1a"/>
    <Product specieID="CaOut"/>
    
    <forwardRate>30e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  <Reaction name="CaMCa4pump1a_bind" id="CaMCa4pump1a_bind">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="pmca1a"/>
    <Product specieID="CaMCa4pmca1a"/>

    <forwardRate>0.8e-6</forwardRate>
    <reverseRate>0.02e-3</reverseRate>
  </Reaction>

  <Reaction name="CaMCa4pump1a_Ca_unbind" id="CaMCa4pump1a_Ca_unbind">
    <Reactant specieID="CaMCa4pmca1a"/>
    <Product specieID="CaMpmca1a"/>
    <Product specieID="Ca" power="4"/>
    <forwardRate>0.47e-3</forwardRate>
    <reverseRate>14.697e-24</reverseRate>
  </Reaction>

  <Reaction name="CaMpump1a_Ca_unbind" id="CaMpump1a_Ca_unbind">
    <Reactant specieID="CaMpmca1a"/>
    <Product specieID="pmca1a"/>
    <Product specieID="CaM"/>
    <forwardRate>0.06e-3</forwardRate>

  </Reaction>

  <Reaction name="Ca_pump2a" id="Ca_pump2a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="ncx"/>
    <Product specieID="ncxCa"/>
    
    <forwardRate>1.68e-5</forwardRate>
    <reverseRate>0.0112</reverseRate>
  </Reaction>
  
  <Reaction name="Ca_pump2b" id="Ca_pump2b">
    <Reactant specieID="ncxCa"/>
    <Product specieID="ncx"/>
    <Product specieID="CaOut"/>

    <forwardRate>0.0056</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
  <Reaction name="Ca_leak1" id="Ca_leak1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Leak"/>
    <Product specieID="CaOutLeak"/>

    <forwardRate>1.5e-6</forwardRate>
    <reverseRate>1.1e-3</reverseRate>
  </Reaction>

  <Reaction name="Ca_leak2" id="Ca_leak2">
    <Reactant specieID="CaOutLeak"/>
    <Product specieID="Ca"/>
    <Product specieID="Leak"/>
    
    <forwardRate>1.1e-3</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>


  
  <Reaction name="Ca_buffer" id="Ca_Buffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Calbin"/>
    <Product specieID="CalbinC"/>

    <forwardRate>2.8e-5</forwardRate>
    <reverseRate>0.0196</reverseRate>
  </Reaction>
  <Reaction name="Ca_fixedbuffer" id="Ca_fixedBuffer">
    <Reactant specieID="Ca"/>
    <Reactant specieID="fixedbuffer"/>
    <Product specieID="fixedbufferCa"/>
    <forwardRate>0.004e-3</forwardRate>
    <reverseRate>20.0e-2</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  
  <Reaction name="CaMC_bind" id="CaMC_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaMCa2C_bind" id="CaMCa2C_bind">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
  <Reaction name="CaMN_bind" id="CaMN_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2N"/>
    
    <forwardRate>0.1e-3</forwardRate>
    <reverseRate>1000e-3</reverseRate>
    
  </Reaction>

  <Reaction name="CaMCa2N_bind" id="CaMCa2N_bind">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    
    <forwardRate>6e-6</forwardRate>
    <reverseRate>9.1e-3</reverseRate>
    
  </Reaction>

  <Reaction name="NgCaM_bind" id="NgCaM_bind">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ng"/>
    <Product specieID="NgCaM"/>
    <forwardRate>28.e-6</forwardRate>
    <reverseRate>36.e-3</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

<Reaction name="CaM_Ca2C" id="CaM_Ca2C">
    <Reactant specieID="CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa2C"/>
    <forwardRate>6e-06</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="CaMCa2C_2Ca" id="CaMCa2C_2Ca">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="CaMCa4"/>
    <forwardRate>0.0001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Specie name="RyR2_4CaMCa4" id="RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaMCa2C_3CaMCa4" id="RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaMCa2C_2CaMCa4" id="RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaMCa2C_1CaMCa4" id="RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_4CaMCa2C" id="RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_3CaMCa4" id="RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_1CaMCa2C_2CaMCa4" id="RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_2CaMCa2C_1CaMCa4" id="RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_1CaM_3CaMCa2C" id="RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_2CaMCa4" id="RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_1CaMCa2C_1CaMCa4" id="RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_2CaM_2CaMCa2C" id="RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaM_1CaMCa4" id="RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_3CaM_1CaMCa2C" id="RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyR2_4CaM" id="RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaMCa4" id="Ca1_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaMCa2C_3CaMCa4" id="Ca1_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaMCa2C_2CaMCa4" id="Ca1_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaMCa2C_1CaMCa4" id="Ca1_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaMCa2C" id="Ca1_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_3CaMCa4" id="Ca1_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_1CaM_3CaMCa2C" id="Ca1_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_2CaMCa4" id="Ca1_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_2CaM_2CaMCa2C" id="Ca1_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaM_1CaMCa4" id="Ca1_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_3CaM_1CaMCa2C" id="Ca1_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca1_RyR2_4CaM" id="Ca1_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaMCa4" id="Ca2_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaMCa2C_3CaMCa4" id="Ca2_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaMCa2C_2CaMCa4" id="Ca2_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaMCa2C_1CaMCa4" id="Ca2_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaMCa2C" id="Ca2_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_3CaMCa4" id="Ca2_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_1CaM_3CaMCa2C" id="Ca2_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_2CaMCa4" id="Ca2_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_2CaM_2CaMCa2C" id="Ca2_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaM_1CaMCa4" id="Ca2_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_3CaM_1CaMCa2C" id="Ca2_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca2_RyR2_4CaM" id="Ca2_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaMCa4" id="Ca3_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaMCa2C_3CaMCa4" id="Ca3_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaMCa2C_2CaMCa4" id="Ca3_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaMCa2C_1CaMCa4" id="Ca3_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaMCa2C" id="Ca3_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_3CaMCa4" id="Ca3_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_1CaM_3CaMCa2C" id="Ca3_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_2CaMCa4" id="Ca3_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_2CaM_2CaMCa2C" id="Ca3_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaM_1CaMCa4" id="Ca3_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_3CaM_1CaMCa2C" id="Ca3_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca3_RyR2_4CaM" id="Ca3_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4" id="Ca4_RyR2_4CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4" id="Ca4_RyR2_1CaMCa2C_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4" id="Ca4_RyR2_2CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4" id="Ca4_RyR2_3CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C" id="Ca4_RyR2_4CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4" id="Ca4_RyR2_1CaM_3CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C" id="Ca4_RyR2_1CaM_3CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4" id="Ca4_RyR2_2CaM_2CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C" id="Ca4_RyR2_2CaM_2CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4" id="Ca4_RyR2_3CaM_1CaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C" id="Ca4_RyR2_3CaM_1CaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM" id="Ca4_RyR2_4CaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_O1" id="Ca4_RyR2_4CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_O2" id="Ca4_RyR2_4CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_C1" id="Ca4_RyR2_4CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_I" id="Ca4_RyR2_4CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa4_I2" id="Ca4_RyR2_4CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_O1" id="Ca4_RyR2_4CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_O2" id="Ca4_RyR2_4CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_C1" id="Ca4_RyR2_4CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaMCa2C_I" id="Ca4_RyR2_4CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_O1" id="Ca4_RyR2_1CaM_3CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_O2" id="Ca4_RyR2_1CaM_3CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_C1" id="Ca4_RyR2_1CaM_3CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_I" id="Ca4_RyR2_1CaM_3CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa4_I2" id="Ca4_RyR2_1CaM_3CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_O1" id="Ca4_RyR2_1CaM_3CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_O2" id="Ca4_RyR2_1CaM_3CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_C1" id="Ca4_RyR2_1CaM_3CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_1CaM_3CaMCa2C_I" id="Ca4_RyR2_1CaM_3CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_O1" id="Ca4_RyR2_2CaM_2CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_O2" id="Ca4_RyR2_2CaM_2CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_C1" id="Ca4_RyR2_2CaM_2CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_I" id="Ca4_RyR2_2CaM_2CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa4_I2" id="Ca4_RyR2_2CaM_2CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_O1" id="Ca4_RyR2_2CaM_2CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_O2" id="Ca4_RyR2_2CaM_2CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_C1" id="Ca4_RyR2_2CaM_2CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_2CaM_2CaMCa2C_I" id="Ca4_RyR2_2CaM_2CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_O1" id="Ca4_RyR2_3CaM_1CaMCa4_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_O2" id="Ca4_RyR2_3CaM_1CaMCa4_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_C1" id="Ca4_RyR2_3CaM_1CaMCa4_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_I" id="Ca4_RyR2_3CaM_1CaMCa4_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa4_I2" id="Ca4_RyR2_3CaM_1CaMCa4_I2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_O1" id="Ca4_RyR2_3CaM_1CaMCa2C_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_O2" id="Ca4_RyR2_3CaM_1CaMCa2C_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_C1" id="Ca4_RyR2_3CaM_1CaMCa2C_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_3CaM_1CaMCa2C_I" id="Ca4_RyR2_3CaM_1CaMCa2C_I" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_O1" id="Ca4_RyR2_4CaM_O1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_O2" id="Ca4_RyR2_4CaM_O2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_C1" id="Ca4_RyR2_4CaM_C1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Ca4_RyR2_4CaM_I" id="Ca4_RyR2_4CaM_I" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="RyR2_4CaMCa4_CaMRyR2Ca1_1" id="RyR2_4CaMCa4_CaMRyR2Ca1_1">
    <Reactant specieID="RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_3CaMCa4_2CaN_2" id="RyR2_1CaMCa2C_3CaMCa4_2CaN_2">
    <Reactant specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca1_3" id="RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca1_3">
    <Reactant specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_2CaMCa4_2CaN_4" id="RyR2_2CaMCa2C_2CaMCa4_2CaN_4">
    <Reactant specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca1_5" id="RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca1_5">
    <Reactant specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_1CaMCa4_2CaN_6" id="RyR2_3CaMCa2C_1CaMCa4_2CaN_6">
    <Reactant specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca1_7" id="RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca1_7">
    <Reactant specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaMCa2C_2CaN_8" id="RyR2_4CaMCa2C_2CaN_8">
    <Reactant specieID="RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaMCa2C_CaMRyR2Ca1_9" id="RyR2_4CaMCa2C_CaMRyR2Ca1_9">
    <Reactant specieID="RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa4_2CaC_10" id="RyR2_1CaM_3CaMCa4_2CaC_10">
    <Reactant specieID="RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa4_CaMRyR2Ca1_11" id="RyR2_1CaM_3CaMCa4_CaMRyR2Ca1_11">
    <Reactant specieID="RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_12" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_12">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_13" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_13">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_14" id="RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca1_14">
    <Reactant specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_15" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_15">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_16" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_16">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_17" id="RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca1_17">
    <Reactant specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_2CaC_18" id="RyR2_1CaM_3CaMCa2C_2CaC_18">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_4CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_2CaN_19" id="RyR2_1CaM_3CaMCa2C_2CaN_19">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_1CaM_3CaMCa2C_CaMRyR2Ca1_20" id="RyR2_1CaM_3CaMCa2C_CaMRyR2Ca1_20">
    <Reactant specieID="RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa4_2CaC_21" id="RyR2_2CaM_2CaMCa4_2CaC_21">
    <Reactant specieID="RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa4_CaMRyR2Ca1_22" id="RyR2_2CaM_2CaMCa4_CaMRyR2Ca1_22">
    <Reactant specieID="RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_23" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_23">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_24" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_24">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_25" id="RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca1_25">
    <Reactant specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_2CaC_26" id="RyR2_2CaM_2CaMCa2C_2CaC_26">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_2CaN_27" id="RyR2_2CaM_2CaMCa2C_2CaN_27">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_2CaM_2CaMCa2C_CaMRyR2Ca1_28" id="RyR2_2CaM_2CaMCa2C_CaMRyR2Ca1_28">
    <Reactant specieID="RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa4_2CaC_29" id="RyR2_3CaM_1CaMCa4_2CaC_29">
    <Reactant specieID="RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa4_CaMRyR2Ca1_30" id="RyR2_3CaM_1CaMCa4_CaMRyR2Ca1_30">
    <Reactant specieID="RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_2CaC_31" id="RyR2_3CaM_1CaMCa2C_2CaC_31">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_2CaN_32" id="RyR2_3CaM_1CaMCa2C_2CaN_32">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_3CaM_1CaMCa2C_CaMRyR2Ca1_33" id="RyR2_3CaM_1CaMCa2C_CaMRyR2Ca1_33">
    <Reactant specieID="RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaM_2CaC_34" id="RyR2_4CaM_2CaC_34">
    <Reactant specieID="RyR2_4CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="RyR2_4CaM_CaMRyR2Ca1_35" id="RyR2_4CaM_CaMRyR2Ca1_35">
    <Reactant specieID="RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca1_RyR2_4CaM"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa4_CaMRyR2Ca2_36" id="Ca1_RyR2_4CaMCa4_CaMRyR2Ca2_36">
    <Reactant specieID="Ca1_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_3CaMCa4_2CaN_37" id="Ca1_RyR2_1CaMCa2C_3CaMCa4_2CaN_37">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca2_38" id="Ca1_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca2_38">
    <Reactant specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_2CaMCa4_2CaN_39" id="Ca1_RyR2_2CaMCa2C_2CaMCa4_2CaN_39">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca2_40" id="Ca1_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca2_40">
    <Reactant specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_1CaMCa4_2CaN_41" id="Ca1_RyR2_3CaMCa2C_1CaMCa4_2CaN_41">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca2_42" id="Ca1_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca2_42">
    <Reactant specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa2C_2CaN_43" id="Ca1_RyR2_4CaMCa2C_2CaN_43">
    <Reactant specieID="Ca1_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaMCa2C_CaMRyR2Ca2_44" id="Ca1_RyR2_4CaMCa2C_CaMRyR2Ca2_44">
    <Reactant specieID="Ca1_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa4_2CaC_45" id="Ca1_RyR2_1CaM_3CaMCa4_2CaC_45">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa4_CaMRyR2Ca2_46" id="Ca1_RyR2_1CaM_3CaMCa4_CaMRyR2Ca2_46">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_47" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_47">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_48" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_48">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_49" id="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca2_49">
    <Reactant specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_50" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_50">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_51" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_51">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_52" id="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca2_52">
    <Reactant specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_2CaC_53" id="Ca1_RyR2_1CaM_3CaMCa2C_2CaC_53">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_4CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_2CaN_54" id="Ca1_RyR2_1CaM_3CaMCa2C_2CaN_54">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca2_55" id="Ca1_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca2_55">
    <Reactant specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa4_2CaC_56" id="Ca1_RyR2_2CaM_2CaMCa4_2CaC_56">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa4_CaMRyR2Ca2_57" id="Ca1_RyR2_2CaM_2CaMCa4_CaMRyR2Ca2_57">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_58" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_58">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_59" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_59">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_60" id="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca2_60">
    <Reactant specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_2CaC_61" id="Ca1_RyR2_2CaM_2CaMCa2C_2CaC_61">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_2CaN_62" id="Ca1_RyR2_2CaM_2CaMCa2C_2CaN_62">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca2_63" id="Ca1_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca2_63">
    <Reactant specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa4_2CaC_64" id="Ca1_RyR2_3CaM_1CaMCa4_2CaC_64">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa4_CaMRyR2Ca2_65" id="Ca1_RyR2_3CaM_1CaMCa4_CaMRyR2Ca2_65">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_2CaC_66" id="Ca1_RyR2_3CaM_1CaMCa2C_2CaC_66">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_2CaN_67" id="Ca1_RyR2_3CaM_1CaMCa2C_2CaN_67">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca2_68" id="Ca1_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca2_68">
    <Reactant specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaM_2CaC_69" id="Ca1_RyR2_4CaM_2CaC_69">
    <Reactant specieID="Ca1_RyR2_4CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca1_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca1_RyR2_4CaM_CaMRyR2Ca2_70" id="Ca1_RyR2_4CaM_CaMRyR2Ca2_70">
    <Reactant specieID="Ca1_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca2_RyR2_4CaM"/>
    <forwardRate>0.00075</forwardRate>
    <reverseRate>6</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa4_CaMRyR2Ca3_71" id="Ca2_RyR2_4CaMCa4_CaMRyR2Ca3_71">
    <Reactant specieID="Ca2_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_3CaMCa4_2CaN_72" id="Ca2_RyR2_1CaMCa2C_3CaMCa4_2CaN_72">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca3_73" id="Ca2_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca3_73">
    <Reactant specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_2CaMCa4_2CaN_74" id="Ca2_RyR2_2CaMCa2C_2CaMCa4_2CaN_74">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca3_75" id="Ca2_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca3_75">
    <Reactant specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_1CaMCa4_2CaN_76" id="Ca2_RyR2_3CaMCa2C_1CaMCa4_2CaN_76">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca3_77" id="Ca2_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca3_77">
    <Reactant specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa2C_2CaN_78" id="Ca2_RyR2_4CaMCa2C_2CaN_78">
    <Reactant specieID="Ca2_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaMCa2C_CaMRyR2Ca3_79" id="Ca2_RyR2_4CaMCa2C_CaMRyR2Ca3_79">
    <Reactant specieID="Ca2_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa4_2CaC_80" id="Ca2_RyR2_1CaM_3CaMCa4_2CaC_80">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa4_CaMRyR2Ca3_81" id="Ca2_RyR2_1CaM_3CaMCa4_CaMRyR2Ca3_81">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_82" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_82">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_83" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_83">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_84" id="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca3_84">
    <Reactant specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_85" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_85">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_86" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_86">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_87" id="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca3_87">
    <Reactant specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_2CaC_88" id="Ca2_RyR2_1CaM_3CaMCa2C_2CaC_88">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_4CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_2CaN_89" id="Ca2_RyR2_1CaM_3CaMCa2C_2CaN_89">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca3_90" id="Ca2_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca3_90">
    <Reactant specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa4_2CaC_91" id="Ca2_RyR2_2CaM_2CaMCa4_2CaC_91">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa4_CaMRyR2Ca3_92" id="Ca2_RyR2_2CaM_2CaMCa4_CaMRyR2Ca3_92">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_93" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_93">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_94" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_94">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_95" id="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca3_95">
    <Reactant specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_2CaC_96" id="Ca2_RyR2_2CaM_2CaMCa2C_2CaC_96">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_2CaN_97" id="Ca2_RyR2_2CaM_2CaMCa2C_2CaN_97">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca3_98" id="Ca2_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca3_98">
    <Reactant specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa4_2CaC_99" id="Ca2_RyR2_3CaM_1CaMCa4_2CaC_99">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa4_CaMRyR2Ca3_100" id="Ca2_RyR2_3CaM_1CaMCa4_CaMRyR2Ca3_100">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_2CaC_101" id="Ca2_RyR2_3CaM_1CaMCa2C_2CaC_101">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_2CaN_102" id="Ca2_RyR2_3CaM_1CaMCa2C_2CaN_102">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca3_103" id="Ca2_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca3_103">
    <Reactant specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaM_2CaC_104" id="Ca2_RyR2_4CaM_2CaC_104">
    <Reactant specieID="Ca2_RyR2_4CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca2_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca2_RyR2_4CaM_CaMRyR2Ca3_105" id="Ca2_RyR2_4CaM_CaMRyR2Ca3_105">
    <Reactant specieID="Ca2_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca3_RyR2_4CaM"/>
    <forwardRate>0.0005</forwardRate>
    <reverseRate>9</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa4_CaMRyR2Ca4_106" id="Ca3_RyR2_4CaMCa4_CaMRyR2Ca4_106">
    <Reactant specieID="Ca3_RyR2_4CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_3CaMCa4_2CaN_107" id="Ca3_RyR2_1CaMCa2C_3CaMCa4_2CaN_107">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4_108" id="Ca3_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4_108">
    <Reactant specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_2CaMCa4_2CaN_109" id="Ca3_RyR2_2CaMCa2C_2CaMCa4_2CaN_109">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4_110" id="Ca3_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4_110">
    <Reactant specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_1CaMCa4_2CaN_111" id="Ca3_RyR2_3CaMCa2C_1CaMCa4_2CaN_111">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4_112" id="Ca3_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4_112">
    <Reactant specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa2C_2CaN_113" id="Ca3_RyR2_4CaMCa2C_2CaN_113">
    <Reactant specieID="Ca3_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaMCa2C_CaMRyR2Ca4_114" id="Ca3_RyR2_4CaMCa2C_CaMRyR2Ca4_114">
    <Reactant specieID="Ca3_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa4_2CaC_115" id="Ca3_RyR2_1CaM_3CaMCa4_2CaC_115">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4_116" id="Ca3_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4_116">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_117" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_117">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_118" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_118">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_119" id="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4_119">
    <Reactant specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_120" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_120">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_121" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_121">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_122" id="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4_122">
    <Reactant specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_2CaC_123" id="Ca3_RyR2_1CaM_3CaMCa2C_2CaC_123">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_4CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_2CaN_124" id="Ca3_RyR2_1CaM_3CaMCa2C_2CaN_124">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4_125" id="Ca3_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4_125">
    <Reactant specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa4_2CaC_126" id="Ca3_RyR2_2CaM_2CaMCa4_2CaC_126">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4_127" id="Ca3_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4_127">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_128" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_128">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_129" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_129">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_130" id="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4_130">
    <Reactant specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_2CaC_131" id="Ca3_RyR2_2CaM_2CaMCa2C_2CaC_131">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_2CaN_132" id="Ca3_RyR2_2CaM_2CaMCa2C_2CaN_132">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4_133" id="Ca3_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4_133">
    <Reactant specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa4_2CaC_134" id="Ca3_RyR2_3CaM_1CaMCa4_2CaC_134">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4_135" id="Ca3_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4_135">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_2CaC_136" id="Ca3_RyR2_3CaM_1CaMCa2C_2CaC_136">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_2CaN_137" id="Ca3_RyR2_3CaM_1CaMCa2C_2CaN_137">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4_138" id="Ca3_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4_138">
    <Reactant specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaM_2CaC_139" id="Ca3_RyR2_4CaM_2CaC_139">
    <Reactant specieID="Ca3_RyR2_4CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca3_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca3_RyR2_4CaM_CaMRyR2Ca4_140" id="Ca3_RyR2_4CaM_CaMRyR2Ca4_140">
    <Reactant specieID="Ca3_RyR2_4CaM"/>
    <Reactant specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM"/>
    <forwardRate>0.00025</forwardRate>
    <reverseRate>12</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_2CaN_141" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_2CaN_141">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_2CaN_142" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_2CaN_142">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_2CaN_143" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_2CaN_143">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_2CaN_144" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_2CaN_144">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_I_2CaN_145" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_I_2CaN_145">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_2CaN_146" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_2CaN_146">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_2CaN_147" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_2CaN_147">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_2CaN_148" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_2CaN_148">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_2CaN_149" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_2CaN_149">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_I_2CaN_150" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_I_2CaN_150">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_2CaN_151" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_2CaN_151">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_2CaN_152" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_2CaN_152">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_2CaN_153" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_2CaN_153">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_2CaN_154" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_2CaN_154">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_I_2CaN_155" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_I_2CaN_155">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_2CaN_156" id="Ca4_RyR2_4CaMCa2C_2CaN_156">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_2CaN_157" id="Ca4_RyR2_4CaMCa2C_O1_2CaN_157">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_2CaN_158" id="Ca4_RyR2_4CaMCa2C_O2_2CaN_158">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_C1_2CaN_159" id="Ca4_RyR2_4CaMCa2C_C1_2CaN_159">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_I_2CaN_160" id="Ca4_RyR2_4CaMCa2C_I_2CaN_160">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_2CaC_161" id="Ca4_RyR2_1CaM_3CaMCa4_2CaC_161">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_2CaC_162" id="Ca4_RyR2_1CaM_3CaMCa4_O1_2CaC_162">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_2CaC_163" id="Ca4_RyR2_1CaM_3CaMCa4_O2_2CaC_163">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_C1_2CaC_164" id="Ca4_RyR2_1CaM_3CaMCa4_C1_2CaC_164">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_I_2CaC_165" id="Ca4_RyR2_1CaM_3CaMCa4_I_2CaC_165">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_166" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaC_166">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaC_167" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaC_167">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaC_168" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaC_168">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaC_169" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaC_169">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaC_170" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaC_170">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_171" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_2CaN_171">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaN_172" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_2CaN_172">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaN_173" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_2CaN_173">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaN_174" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_2CaN_174">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaN_175" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I_2CaN_175">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_176" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaC_176">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaC_177" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaC_177">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaC_178" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaC_178">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaC_179" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaC_179">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaC_180" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaC_180">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_181" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_2CaN_181">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaN_182" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_2CaN_182">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaN_183" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_2CaN_183">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaN_184" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_2CaN_184">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaN_185" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I_2CaN_185">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_2CaC_186" id="Ca4_RyR2_1CaM_3CaMCa2C_2CaC_186">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaC_187" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaC_187">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaC_188" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaC_188">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaC_189" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaC_189">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaC_190" id="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaC_190">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_2CaN_191" id="Ca4_RyR2_1CaM_3CaMCa2C_2CaN_191">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaN_192" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_2CaN_192">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaN_193" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_2CaN_193">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaN_194" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_2CaN_194">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaN_195" id="Ca4_RyR2_1CaM_3CaMCa2C_I_2CaN_195">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_2CaC_196" id="Ca4_RyR2_2CaM_2CaMCa4_2CaC_196">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_2CaC_197" id="Ca4_RyR2_2CaM_2CaMCa4_O1_2CaC_197">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_2CaC_198" id="Ca4_RyR2_2CaM_2CaMCa4_O2_2CaC_198">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_C1_2CaC_199" id="Ca4_RyR2_2CaM_2CaMCa4_C1_2CaC_199">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_I_2CaC_200" id="Ca4_RyR2_2CaM_2CaMCa4_I_2CaC_200">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_201" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaC_201">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaC_202" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaC_202">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaC_203" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaC_203">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaC_204" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaC_204">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaC_205" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaC_205">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_206" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_2CaN_206">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaN_207" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_2CaN_207">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaN_208" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_2CaN_208">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaN_209" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_2CaN_209">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaN_210" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I_2CaN_210">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_2CaC_211" id="Ca4_RyR2_2CaM_2CaMCa2C_2CaC_211">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaC_212" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaC_212">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaC_213" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaC_213">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaC_214" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaC_214">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaC_215" id="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaC_215">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_2CaN_216" id="Ca4_RyR2_2CaM_2CaMCa2C_2CaN_216">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaN_217" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_2CaN_217">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaN_218" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_2CaN_218">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaN_219" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_2CaN_219">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaN_220" id="Ca4_RyR2_2CaM_2CaMCa2C_I_2CaN_220">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_2CaC_221" id="Ca4_RyR2_3CaM_1CaMCa4_2CaC_221">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_2CaC_222" id="Ca4_RyR2_3CaM_1CaMCa4_O1_2CaC_222">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_2CaC_223" id="Ca4_RyR2_3CaM_1CaMCa4_O2_2CaC_223">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_C1_2CaC_224" id="Ca4_RyR2_3CaM_1CaMCa4_C1_2CaC_224">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_I_2CaC_225" id="Ca4_RyR2_3CaM_1CaMCa4_I_2CaC_225">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_2CaC_226" id="Ca4_RyR2_3CaM_1CaMCa2C_2CaC_226">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaC_227" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaC_227">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaC_228" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaC_228">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaC_229" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaC_229">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaC_230" id="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaC_230">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_2CaN_231" id="Ca4_RyR2_3CaM_1CaMCa2C_2CaN_231">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaN_232" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_2CaN_232">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaN_233" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_2CaN_233">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaN_234" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_2CaN_234">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaN_235" id="Ca4_RyR2_3CaM_1CaMCa2C_I_2CaN_235">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>0.001</forwardRate>
    <reverseRate>1.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_2CaC_236" id="Ca4_RyR2_4CaM_2CaC_236">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_2CaC_237" id="Ca4_RyR2_4CaM_O1_2CaC_237">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_2CaC_238" id="Ca4_RyR2_4CaM_O2_2CaC_238">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_C1_2CaC_239" id="Ca4_RyR2_4CaM_C1_2CaC_239">
    <Reactant specieID="Ca4_RyR2_4CaM_C1"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_I_2CaC_240" id="Ca4_RyR2_4CaM_I_2CaC_240">
    <Reactant specieID="Ca4_RyR2_4CaM_I"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>6e-05</forwardRate>
    <reverseRate>0.0091</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O1_241" id="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O1_241">
    <Reactant specieID="Ca4_RyR2_4CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O2_242" id="Ca4_RyR2_4CaMCa4_CaMRyR2Ca4O2_242">
    <Reactant specieID="Ca4_RyR2_4CaMCa4"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_CaMRyR2Ca4O1C1_243" id="Ca4_RyR2_4CaMCa4_O1_CaMRyR2Ca4O1C1_243">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_CaMRyR2Ca4O2C1_244" id="Ca4_RyR2_4CaMCa4_O2_CaMRyR2Ca4O2C1_244">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_C1_CaMRyR2Ca4C1I_245" id="Ca4_RyR2_4CaMCa4_C1_CaMRyR2Ca4C1I_245">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_II2_246" id="Ca4_RyR2_4CaMCa4_O1_II2_246">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_II2_247" id="Ca4_RyR2_4CaMCa4_O2_II2_247">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O1_248" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O1_248">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O2_249" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_CaMRyR2Ca4O2_249">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_CaMRyR2Ca4O1C1_250" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_CaMRyR2Ca4O1C1_250">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_CaMRyR2Ca4O2C1_251" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_CaMRyR2Ca4O2C1_251">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_CaMRyR2Ca4C1I_252" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1_CaMRyR2Ca4C1I_252">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_II2_253" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_II2_253">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_II2_254" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_II2_254">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_255" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_255">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_256" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_256">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_257" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_257">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_258" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_258">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_259" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_259">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_II2_260" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_II2_260">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_II2_261" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_II2_261">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_262" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_262">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_263" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_263">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_264" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_264">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_265" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_265">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_266" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_266">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_II2_267" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_II2_267">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_II2_268" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_II2_268">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O1_269" id="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O1_269">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O2_270" id="Ca4_RyR2_4CaMCa2C_CaMRyR2Ca4O2_270">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_CaMRyR2Ca4O1C1_271" id="Ca4_RyR2_4CaMCa2C_O1_CaMRyR2Ca4O1C1_271">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_CaMRyR2Ca4O2C1_272" id="Ca4_RyR2_4CaMCa2C_O2_CaMRyR2Ca4O2C1_272">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_C1_CaMRyR2Ca4C1I_273" id="Ca4_RyR2_4CaMCa2C_C1_CaMRyR2Ca4C1I_273">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O1_274" id="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O1_274">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O2_275" id="Ca4_RyR2_1CaM_3CaMCa4_CaMRyR2Ca4O2_275">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_CaMRyR2Ca4O1C1_276" id="Ca4_RyR2_1CaM_3CaMCa4_O1_CaMRyR2Ca4O1C1_276">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_CaMRyR2Ca4O2C1_277" id="Ca4_RyR2_1CaM_3CaMCa4_O2_CaMRyR2Ca4O2C1_277">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_C1_CaMRyR2Ca4C1I_278" id="Ca4_RyR2_1CaM_3CaMCa4_C1_CaMRyR2Ca4C1I_278">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_II2_279" id="Ca4_RyR2_1CaM_3CaMCa4_O1_II2_279">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_II2_280" id="Ca4_RyR2_1CaM_3CaMCa4_O2_II2_280">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_281" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O1_281">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_282" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_CaMRyR2Ca4O2_282">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_283" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_CaMRyR2Ca4O1C1_283">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_284" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_CaMRyR2Ca4O2C1_284">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_285" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1_CaMRyR2Ca4C1I_285">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_II2_286" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_II2_286">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_II2_287" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_II2_287">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_288" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_288">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_289" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_289">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_290" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_290">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_291" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_291">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_292" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_292">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_II2_293" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_II2_293">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_II2_294" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_II2_294">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O1_295" id="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O1_295">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O2_296" id="Ca4_RyR2_1CaM_3CaMCa2C_CaMRyR2Ca4O2_296">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_CaMRyR2Ca4O1C1_297" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_CaMRyR2Ca4O1C1_297">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_CaMRyR2Ca4O2C1_298" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_CaMRyR2Ca4O2C1_298">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_C1_CaMRyR2Ca4C1I_299" id="Ca4_RyR2_1CaM_3CaMCa2C_C1_CaMRyR2Ca4C1I_299">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O1_300" id="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O1_300">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O2_301" id="Ca4_RyR2_2CaM_2CaMCa4_CaMRyR2Ca4O2_301">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_302" id="Ca4_RyR2_2CaM_2CaMCa4_O1_CaMRyR2Ca4O1C1_302">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_303" id="Ca4_RyR2_2CaM_2CaMCa4_O2_CaMRyR2Ca4O2C1_303">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_304" id="Ca4_RyR2_2CaM_2CaMCa4_C1_CaMRyR2Ca4C1I_304">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_II2_305" id="Ca4_RyR2_2CaM_2CaMCa4_O1_II2_305">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_II2_306" id="Ca4_RyR2_2CaM_2CaMCa4_O2_II2_306">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_307" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O1_307">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_308" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_CaMRyR2Ca4O2_308">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_309" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_CaMRyR2Ca4O1C1_309">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_310" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_CaMRyR2Ca4O2C1_310">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_311" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1_CaMRyR2Ca4C1I_311">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_II2_312" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_II2_312">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_II2_313" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_II2_313">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O1_314" id="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O1_314">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O2_315" id="Ca4_RyR2_2CaM_2CaMCa2C_CaMRyR2Ca4O2_315">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_316" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_CaMRyR2Ca4O1C1_316">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_317" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_CaMRyR2Ca4O2C1_317">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_318" id="Ca4_RyR2_2CaM_2CaMCa2C_C1_CaMRyR2Ca4C1I_318">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O1_319" id="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O1_319">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O2_320" id="Ca4_RyR2_3CaM_1CaMCa4_CaMRyR2Ca4O2_320">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_321" id="Ca4_RyR2_3CaM_1CaMCa4_O1_CaMRyR2Ca4O1C1_321">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_322" id="Ca4_RyR2_3CaM_1CaMCa4_O2_CaMRyR2Ca4O2C1_322">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_323" id="Ca4_RyR2_3CaM_1CaMCa4_C1_CaMRyR2Ca4C1I_323">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_C1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_II2_324" id="Ca4_RyR2_3CaM_1CaMCa4_O1_II2_324">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_II2_325" id="Ca4_RyR2_3CaM_1CaMCa4_O2_II2_325">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_I2"/>
    <forwardRate>1</forwardRate>
    <reverseRate>0.06</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O1_326" id="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O1_326">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O2_327" id="Ca4_RyR2_3CaM_1CaMCa2C_CaMRyR2Ca4O2_327">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_328" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_CaMRyR2Ca4O1C1_328">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_329" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_CaMRyR2Ca4O2C1_329">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_330" id="Ca4_RyR2_3CaM_1CaMCa2C_C1_CaMRyR2Ca4C1I_330">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_C1"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_CaMRyR2Ca4O1_331" id="Ca4_RyR2_4CaM_CaMRyR2Ca4O1_331">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O1"/>
    <forwardRate>38.4</forwardRate>
    <reverseRate>3</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_CaMRyR2Ca4O2_332" id="Ca4_RyR2_4CaM_CaMRyR2Ca4O2_332">
    <Reactant specieID="Ca4_RyR2_4CaM"/>
    <Product specieID="Ca4_RyR2_4CaM_O2"/>
    <forwardRate>0.0384</forwardRate>
    <reverseRate>0.003</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_CaMRyR2Ca4O1C1_333" id="Ca4_RyR2_4CaM_O1_CaMRyR2Ca4O1C1_333">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Product specieID="Ca4_RyR2_4CaM_C1"/>
    <forwardRate>0.0025</forwardRate>
    <reverseRate>0.77</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_CaMRyR2Ca4O2C1_334" id="Ca4_RyR2_4CaM_O2_CaMRyR2Ca4O2C1_334">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Product specieID="Ca4_RyR2_4CaM_C1"/>
    <forwardRate>2.5</forwardRate>
    <reverseRate>770.0</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_C1_CaMRyR2Ca4C1I_335" id="Ca4_RyR2_4CaM_C1_CaMRyR2Ca4C1I_335">
    <Reactant specieID="Ca4_RyR2_4CaM_C1"/>
    <Product specieID="Ca4_RyR2_4CaM_I"/>
    <forwardRate>11.28</forwardRate>
    <reverseRate>0.05</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Specie name="CaER" id="CaER" kdiff="10" kdiffunit="mu2/s"/>
  <Reaction name="Ca4_RyR2_4CaMCa4_O1_release_336" id="Ca4_RyR2_4CaMCa4_O1_release_336">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa4_O2_release_337" id="Ca4_RyR2_4CaMCa4_O2_release_337">
    <Reactant specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_release_338" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1_release_338">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_release_339" id="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2_release_339">
    <Reactant specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaMCa2C_3CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_release_340" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1_release_340">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_release_341" id="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2_release_341">
    <Reactant specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_release_342" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1_release_342">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_release_343" id="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2_release_343">
    <Reactant specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O1_release_344" id="Ca4_RyR2_4CaMCa2C_O1_release_344">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaMCa2C_O2_release_345" id="Ca4_RyR2_4CaMCa2C_O2_release_345">
    <Reactant specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O1_release_346" id="Ca4_RyR2_1CaM_3CaMCa4_O1_release_346">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa4_O2_release_347" id="Ca4_RyR2_1CaM_3CaMCa4_O2_release_347">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_release_348" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1_release_348">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_release_349" id="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2_release_349">
    <Reactant specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_1CaMCa2C_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_release_350" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1_release_350">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_release_351" id="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2_release_351">
    <Reactant specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_2CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O1_release_352" id="Ca4_RyR2_1CaM_3CaMCa2C_O1_release_352">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_1CaM_3CaMCa2C_O2_release_353" id="Ca4_RyR2_1CaM_3CaMCa2C_O2_release_353">
    <Reactant specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_1CaM_3CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O1_release_354" id="Ca4_RyR2_2CaM_2CaMCa4_O1_release_354">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa4_O2_release_355" id="Ca4_RyR2_2CaM_2CaMCa4_O2_release_355">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_release_356" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1_release_356">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_release_357" id="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2_release_357">
    <Reactant specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_1CaMCa2C_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O1_release_358" id="Ca4_RyR2_2CaM_2CaMCa2C_O1_release_358">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_2CaM_2CaMCa2C_O2_release_359" id="Ca4_RyR2_2CaM_2CaMCa2C_O2_release_359">
    <Reactant specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_2CaM_2CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O1_release_360" id="Ca4_RyR2_3CaM_1CaMCa4_O1_release_360">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa4_O2_release_361" id="Ca4_RyR2_3CaM_1CaMCa4_O2_release_361">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa4_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O1_release_362" id="Ca4_RyR2_3CaM_1CaMCa2C_O1_release_362">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_3CaM_1CaMCa2C_O2_release_363" id="Ca4_RyR2_3CaM_1CaMCa2C_O2_release_363">
    <Reactant specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_3CaM_1CaMCa2C_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O1_release_364" id="Ca4_RyR2_4CaM_O1_release_364">
    <Reactant specieID="Ca4_RyR2_4CaM_O1"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM_O1"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
  <Reaction name="Ca4_RyR2_4CaM_O2_release_365" id="Ca4_RyR2_4CaM_O2_release_365">
    <Reactant specieID="Ca4_RyR2_4CaM_O2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="Ca"/>
    <Product specieID="Ca4_RyR2_4CaM_O2"/>
    <forwardRate>0.0016667</forwardRate>
    <reverseRate>0.005</reverseRate>
    <Q10>.2</Q10>
  </Reaction>
<Specie name="Cyt_SERCA" id="Cyt_SERCA" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca" id="Cyt_SERCA_Ca" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Cyt_SERCA_Ca2" id="Cyt_SERCA_Ca2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="LeakER" id="LeakER" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRT" id="CRT" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="CRTP" id="CRTP" kdiff="0" kdiffunit="mu2/s"/>
     
  <Reaction name="Cyt_SERCA_1a" id="Cyt_SERCA_1a">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA"/>
    <Product specieID="Cyt_SERCA_Ca"/>
    
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
 
  <Reaction name="Cyt_SERCA_1b" id="Cyt_SERCA_1b">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Cyt_SERCA_Ca"/>
    <Product specieID="Cyt_SERCA_Ca2"/>
        
    <forwardRate>17147e-7</forwardRate>
    <reverseRate>8426.3e-4</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Reaction name="Cyt_SERCA_1d" id="Cyt_SERCA_1d">
    <Reactant specieID="Cyt_SERCA_Ca2"/>
    <Product specieID="CaER" power="2"/>
    <Product specieID="Cyt_SERCA"/>
    <forwardRate>50e-3</forwardRate>
    <Q10>0.2</Q10>
  </Reaction>


  <Reaction name="CRTP_bind" id="CRTP_bind">
    <Reactant specieID="CRT"/>
    <Reactant specieID="CaER"/>
    <Product specieID="CRTP"/>
    
    <forwardRate>1e-5</forwardRate>
    <reverseRate>0.1</reverseRate>
  </Reaction>

  <Reaction name="Ca_leakER1" id="Ca_leakaER1">
    <Reactant specieID="CaER"/>
    <Reactant specieID="LeakER"/>
    <Product specieID="LeakER"/>
    <Product specieID="Ca"/>

    <forwardRate>1.8e-7</forwardRate>
    <reverseRate>1.8e-7</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>
<Specie name="CK" id="CK" kdiff="0.32" kdiffunit="mu2/s"/>
    <Specie name="CKp" id="CKp" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKCaMCa4" id="CKCaMCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="CKpCaMCa4" id="CKpCaMCa4" kdiff="0.017" kdiffunit="mu2/s"/>
    <Specie name="Complex" id="Complex" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="pComplex" id="pComplex" kdiff="0" kdiffunit="mu2/s"/>
    
    <Specie name="PP1" id="PP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpPP1" id="CKpPP1" kdiff="0" kdiffunit="mu2/s"/>
    <Specie name="CKpCaMCa4PP1" id="CKpCaMCa4PP1" kdiff="0" kdiffunit="mu2/s"/>
	


<Reaction name="CK bind" id="CK_bind">
        <Reactant specieID="CaMCa4"/>
        <Reactant specieID="CK"/>
        <Product specieID="CKCaMCa4"/>

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 3e-3      </reverseRate>
        <!--0.8 from ode file
	    reverseRate> 0.8e-3      </reverseRate-->
        
    </Reaction>

<Reaction name="CKCaM bind" id="CKCaM_bind">
        <Reactant specieID="CKCaMCa4" power="2"/>
        <Product specieID="Complex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 10e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>

<Reaction name="pComplex bind" id="pComplex_bind">
        <Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="CKCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 10e-3     </reverseRate>
        <Q10>     2             </Q10>
    </Reaction>
<Reaction name="CKpCaMCompl bind" id="CKpCaMCompl_bind">
        <Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKpCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>

<Reaction name="CKCaMCompl bind" id="CKCaMCompl_bind">
        <Reactant specieID="CKCaMCa4"/>
        <Reactant specieID="Complex"/>
        <Product specieID="CKCaMCa4"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.0001e-3 </forwardRate>
        <reverseRate> 0         </reverseRate>
        <Q10>      2            </Q10>
    </Reaction>
    
 <Reaction name="2Complex bind" id="2Complex_bind">
        <Reactant specieID="Complex" power="2"/>
        <Product specieID="Complex"/>
        <Product specieID="pComplex"/>

        <forwardRate> 0.01e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>

 <Reaction name="ComplpCompl bind" id="ComplpCompl_bind">
        <Reactant specieID="Complex"/>
        <Reactant specieID="pComplex"/>
        <Product specieID="pComplex" power="2"/>

        <forwardRate> 0.03e-3   </forwardRate>
        <reverseRate> 0         </reverseRate>
        
    </Reaction>


    
    <Reaction name="CKp auto" id="CKp_auto">
        <Reactant specieID="CKpCaMCa4"/>
        <Product specieID="CaMCa4"/>
        <Product specieID="CKp"/>

        <forwardRate> 0.0008e-3 </forwardRate>
        <reverseRate> 0.01e-3   </reverseRate>
    </Reaction>

<Reaction name="CKp_bind" id="CKp_bind">
	<Reactant specieID="CKp"/>
        <Reactant specieID="PP1"/>
	<Product specieID="CKpPP1"/>

	<forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpPP1_reac" id="CKpPP1_reac">
	<Reactant specieID="CKpPP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CK"/>

	<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

  
   <Reaction name="CKpCaMPP1_bind" id="CKpCaMPP1_bind">
	<Reactant specieID="CKpCaMCa4"/>
        <Reactant specieID="PP1"/>
`	<Product specieID="CKpCaMCa4PP1"/>

	
    <forwardRate> 0.04e-6 </forwardRate>
        <reverseRate> 0.34e-3 </reverseRate>
    </Reaction>

    <Reaction name="CKpCaMPP1_reac" id="CKpCaMPP1_reac">
	<Reactant specieID="CKpCaMCa4PP1"/>
	<Product specieID="PP1"/>
        <Product specieID="CKCaMCa4"/>

<forwardRate> 0.086e-3 </forwardRate>
	<reverseRate> 0 </reverseRate>
    </Reaction>

    <Specie name="PP2B" id="PP2B" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaM" id="PP2BCaM" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa2C" id="PP2BCaMCa2C" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2CaMCa2N" id="PP2BCaMCa2N" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PP2BCaMCa4" id="PP2BCaMCa4" kdiff="0" kdiffunit="mu2/s"/>
  
  <Reaction name="CaMCa2C+PP2B--PP2BCaMCa2C reac" id="CaMCa2C+PP2B--PP2BCaMCa2C_id">
    <Reactant specieID="CaMCa2C"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2C"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="CaMCa2N+PP2B--PP2BCaMCa2N reac" id="CaMCa2N+PP2B--PP2BCaMCa2N_id">
    <Reactant specieID="CaMCa2N"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa2N"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

 
  <Reaction name="CaMCa4+PP2B--PP2BCaMCa4 reac" id="CaMCa4+PP2B--PP2BCaMCa4_id">
    <Reactant specieID="CaMCa4"/>
    <Reactant specieID="PP2B"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 0.046e-3       </forwardRate>
    <reverseRate> 0.0012e-3      </reverseRate>
  </Reaction>

  <Reaction name="PP2BCaMCa2C+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2+Ca2--PP2BCaMCa4_id">
    <Reactant specieID="PP2BCaMCa2C"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 0.1e-03       </forwardRate>
    <reverseRate> 1000e-03      </reverseRate>
    
  </Reaction>

  <Reaction name="PP2BCaMCa2N+Ca2--PP2BCaMCa4 reac" id="PP2BCaMCa2N+Ca2--PP2BCaMCa4_id">
    <Reactant specieID="PP2BCaMCa2N"/>
    <Reactant specieID="Ca" n="2"/>
    <Product specieID="PP2BCaMCa4"/>
    
    <forwardRate> 6.0e-06       </forwardRate>
    <reverseRate> 9.1e-03      </reverseRate>
    
  </Reaction>
<Specie name="Glu" id="Glu" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="GluOut" id="GluOut" kdiff="100" kdiffunit="mu2/s"/>
  <Specie name="MgluR" id="MgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluR" id="GluMgluR" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRdesens" id="GluMgluRdesens" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="MgluRGq" id="MgluRGq" kdiff="0" kdiffunit="mu2/s"/> 
  <Specie name="Gqabg" id="Gqabg" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GluMgluRGq" id="GluMgluRGq" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGTP" id="GqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="GqaGDP" id="GqaGDP" kdiff="0" kdiffunit="mu2/s"/>  

  <Specie name="Plc" id="Plc" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCa" id="PlcCa" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTP" id="PlcCaGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcGqaGTP" id="PlcGqaGTP" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Pip2" id="Pip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaPip2" id="PlcCaPip2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="PlcCaGqaGTPPip2" id="PlcCaGqaGTPPip2" kdiff="0" kdiffunit="mu2/s"/>
 
  
  <Specie name="PIkinase" id="PIkinase" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3degPIk" id="IP3degPIk" kdiff="0" kdiffunit="mu2/s"/>
  
  <Specie name="IP3degrad" id="IP3degrad" kdiff="10.6" kdiffunit="mu2/s"/>

  <Specie name="IP3" id="IP3" kdiff="220." kdiffunit="mu2/s"/>
  <Specie name="IP3K" id="IP3K" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P" id="IP5P" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2" id="IP3K_Ca2" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP5P_IP3" id="IP5P_IP3" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="IP3K_Ca2_IP3" id="IP3K_Ca2_IP3" kdiff="10." kdiffunit="mu2/s"/>


  <Reaction name="Plc+Ca--PlcCa" id="Plc+Ca--PlcCa">
    <Reactant specieID="Ca"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcCa"/>

    <forwardRate> 0.0005e-03   </forwardRate>
    <reverseRate> 1e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="Plc+GqaGTP--PlcGqaGTP" id="Plc+GqaGTP--PlcGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="Plc"/>
    <Product specieID="PlcGqaGTP"/>

    <forwardRate> 0.0007e-03   </forwardRate>
    <reverseRate> 0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcGqaGTP+Ca--PlcCaGqaGTP" id="PlcGqaGTP+Ca--PlcCaGqaGTP">
    <Reactant specieID="Ca"/>
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0025e-03   </forwardRate>
    <reverseRate> 1.0e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="PlcCa+GqaGTP--PlcCaGqaGTP" id="PlcCa+GqaGTP--PlcCaGqaGTP">
    <Reactant specieID="GqaGTP"/>
    <Reactant specieID="PlcCa"/>
    <Product specieID="PlcCaGqaGTP"/>
    
    <forwardRate> 0.0035e-03   </forwardRate>
    <reverseRate>0.7e-03        </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

 
  <Reaction name="PlcCa+Pip2--PlcCaPip2" id="PlcCa+Pip2--PlcCaPip2">
    <Reactant specieID="PlcCa"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaPip2"/>
    
    <forwardRate> 0.05e-06   </forwardRate>
    <reverseRate> 1.8e-3   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  

  <Reaction name="PlcCaPip2--PlcCaDag+IP3" id="PlcCaPip2--PlcCaDag+IP3">
    <Reactant specieID="PlcCaPip2"/>
    <Product specieID="PlcCa"/>
    <Product specieID="IP3"/>
    
    <forwardRate> 0.45e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2" id="PlcCaGqaGTP+Pip2--PlcCaGqaGTPPip2">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Reactant specieID="Pip2"/>
    <Product specieID="PlcCaGqaGTPPip2"/>
    
    <forwardRate>  1.665e-06   </forwardRate>
    <reverseRate>  60e-03   </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
  <Reaction name="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3" id="PlcCaGqaGTPPip2--PlcCaGqaGTPDag+IP3">
    <Reactant specieID="PlcCaGqaGTPPip2"/>
    <Product specieID="PlcCaGqaGTP"/>
    <Product specieID="IP3"/>

    <forwardRate> 30e-03     </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
  </Reaction>

  
  <Reaction name="IP3--IP5P" id="IP3--IP5P">
    <Reactant specieID="IP3"/>
    <Reactant specieID="IP5P"/>
    <Product specieID="IP5P_IP3"/>
    
    <forwardRate> 9e-06      </forwardRate>
    <reverseRate> 72e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3--IP5P-degrad" id="IP3--IP5P-degrad">
    <Reactant specieID="IP5P_IP3"/>
    <Product specieID="IP5P"/>
    <Product specieID="IP3degrad"/>
    <forwardRate> 18e-03      </forwardRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K--2Ca" id="IP3K--2Ca">
    <Reactant specieID="IP3K"/>
    <Reactant specieID="Ca" power="2"/>
    <Product specieID="IP3K_Ca2"/>
    
    <forwardRate> 1111e-09      </forwardRate>
    <reverseRate> 100e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3K2Ca--IP3" id="IP3K2Ca--IP3">
    <Reactant specieID="IP3K_Ca2"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3K_Ca2_IP3"/>

    <forwardRate> 100e-06      </forwardRate>
    <reverseRate> 80e-03      </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

<Reaction name="IP3K2CaIP3" id="IP3K2CaIP3">
  <Reactant specieID="IP3K_Ca2_IP3"/>
  <Product specieID="IP3degrad"/>
  <Product specieID="IP3K_Ca2"/>

    <forwardRate> 20e-03      </forwardRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degrad + PIkinase -- IP3degPIkinase" id="PIkinase1">
    <Reactant specieID="IP3degrad"/>   
    <Reactant specieID="PIkinase"/>
    <Product specieID="IP3degPIk"/>

    <forwardRate> 2.0e-6    </forwardRate>
    <reverseRate> 1e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="IP3degPIkinase -- PIP2 + PIkinase" id="PIkinase2">
    <Reactant specieID="IP3degPIk"/>
    <Product specieID="PIkinase"/>
    <Product specieID="Pip2"/>

    <forwardRate> 1e-3  </forwardRate>
    <reverseRate> 0e-03    </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>    

<Reaction name="PlcGqaGTP--Plc+GqaGDP" id="PlcGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcGqaGTP"/>
    <Product specieID="Plc"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="PlcCaGqaGTP--PlcCa+GqaGDP" id="PlcCaGqaGTP--Plc+GqaGDP">
    <Reactant specieID="PlcCaGqaGTP"/>
    <Product specieID="PlcCa"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   12e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>



<Reaction name="GqaGTP--GqaGDP" id="GqaGTP--GqaGDP">
    <Reactant specieID="GqaGTP"/>
    <Product specieID="GqaGDP"/>

    <forwardRate>   1e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>

<Reaction name="GqaGDP--Gqabg" id="GqaGDP--Gqabg">
  <Reactant specieID="GqaGDP"/>
  <Product specieID="Gqabg"/>

   <forwardRate>   2e-03   </forwardRate>
    <reverseRate>   0  </reverseRate>
    <Q10>         0.2           </Q10>
</Reaction>




<Reaction name="Glu--GluOut" id="Glu--GluOut">
  	<Reactant specieID="Glu"/>
	<Product specieID="GluOut"/>

  	<forwardRate>0.5e-3</forwardRate>
  	<reverseRate>0.02e-6</reverseRate>
  	<Q10>0.2</Q10>
  </Reaction>

  
   <Reaction name="Glu+MgluR--GluMgluRdesens" id="Glu+MgluR--GluMgluRdesens">
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRdesens"/>

        <forwardRate> 0.0625e-03 </forwardRate>
        <reverseRate> 0.001e-03      </reverseRate>
        <Q10>         0.2          </Q10>
    </Reaction>

   <Reaction name="Glu+MgluR--GluMgluR" id="Glu+MgluR--GluMgluR">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="GluMgluR"/>

        <forwardRate> 0.5e-06 </forwardRate>
        <reverseRate> 6.6e-03      </reverseRate>
	<!-- uncomment below and comment above for Glu (vs Dhpg) -->
        <!--forwardRate> 0.002e-03 </forwardRate>
        <reverseRate> 1e-03      </reverseRate-->
        <Q10>         0.2          </Q10>
    </Reaction>

    <Reaction name="Gqabg+GluMgluR--GluMgluRGq" id="Gqabg+GluMgluR--GluMgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="GluMgluR"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate>  0.0015e-03  </forwardRate>
        <reverseRate>   0.68e-03  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>

  <Reaction name="Gqabg+MgluR- -MgluRGq" id="Gqabg+MgluR- -MgluRGq">
        <Reactant specieID="Gqabg"/>
        <Reactant specieID="MgluR"/>
        <Product specieID="MgluRGq"/>

        <forwardRate> 0.75e-06 </forwardRate>
        <reverseRate> 6.8e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <Reaction name="Glu+MgluRGq- -GluMgluRGq" id="Glu+MgluRGq- -GluMgluRGq">
        <Reactant specieID="Glu"/>
        <Reactant specieID="MgluRGq"/>
        <Product specieID="GluMgluRGq"/>

        <forwardRate> 0.001e-03 </forwardRate>
        <reverseRate> 1e-03 </reverseRate>
        <Q10> 0.2 </Q10>
   </Reaction>

   <Reaction name="GluMgluRGq--GqaGTP+GluMgluRGqbg" id="GluMgluRGq--GqaGTP+GluMgluRGqbg">
        <Reactant specieID="GluMgluRGq"/>
        <Product specieID="GqaGTP"/>
        <Product specieID="GluMgluR"/> 
 
        <forwardRate>  0.5e-03 </forwardRate>
        <reverseRate>   0  </reverseRate>
        <Q10>         0.2           </Q10>
    </Reaction>
  

    

<Specie name="IP3R" id="IP3R" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RIP3" id="IP3RIP3" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RO" id="IP3RO" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC" id="IP3RC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC2" id="IP3RC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="IP3RC3" id="IP3RC3" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="IP3RC4" id="IP3RC4" kdiff="0" kdiffunit="mu2/s"/>
  <Reaction name="IP3R+IP3" id="IP3R+IP3">
    <Reactant specieID="IP3R"/>
    <Reactant specieID="IP3"/>
    <Product specieID="IP3RIP3"/>

    <forwardRate> 0.00001   </forwardRate>
    <reverseRate> 0.01       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RIP3+Ca" id="IP3RIP3+Ca">
    <Reactant specieID="IP3RIP3"/>
    <Reactant specieID="Ca"/>
    <Product specieID="IP3RO"/>
    
    <forwardRate> 0.00008   </forwardRate>
    <reverseRate> .02    </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

   <Reaction name="IP3R+Ca" id="IP3R+Ca">                                                                      
    <Reactant specieID="IP3R"/>                                                                      
    <Reactant specieID="Ca"/>                                                                     
    <Product specieID="IP3RC"/>                                                                 
                                                                                                                
    <forwardRate> 2.22e-6  </forwardRate>                                                                       
    <reverseRate> 5e-3      </reverseRate>                                                                      
    <Q10>         0.2           </Q10>                                                                          
  </Reaction>                                                                                                   
                                                                                                                
  <Reaction name="IP3RC+Ca" id="IP3C+Ca">
  <Reactant specieID="IP3RC"/>
      <Reactant specieID="Ca"/>

    <Product specieID="IP3RC2"/>

    <forwardRate> 4.44e-6   </forwardRate>
    <reverseRate> 10e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>

  <Reaction name="IP3RC2+Ca" id="IP3C2+Ca">
    <Reactant specieID="IP3RC2"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC3"/>
    
    <forwardRate> 6.66e-6   </forwardRate>
    <reverseRate> 15e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  <Reaction name="IP3RC3+Ca" id="IP3C3+Ca">
    <Reactant specieID="IP3RC3"/>
    <Reactant specieID="Ca"/>
    
    <Product specieID="IP3RC4"/>
    
    <forwardRate> 8.88e-6   </forwardRate>
    <reverseRate> 20e-3       </reverseRate>
    <Q10>         0.2           </Q10>
  </Reaction>
  
 
<Reaction name="IP3R_Ob-flux_Ia" id="IP3R_Ob-fluxa">
    <Reactant specieID="IP3RO"/>
    <Reactant specieID="CaER"/>
    <Product specieID="IP3RO"/>
    <Product specieID="Ca"/>

    <forwardRate> 5.555666666666666e-05 </forwardRate>
    <reverseRate> 1.8518888888888888e-05      </reverseRate>
    <Q10>   0.2   </Q10>
   </Reaction>
    

 <Specie name="PMJ" id="PMJ" kdiff="0." kdiffunit="mu2/s"/>
  <Specie name="PMJ_STIM_4" id="PMJ_STIM_4" kdiff="0." kdiffunit="mu2/s"/>
    
  <Specie name="Orai3STIM_4" id="Orai3STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai2STIM_4" id="Orai2STIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="OraiSTIM_4" id="OraiSTIM_4" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="Orai" id="Orai" kdiff="0" kdiffunit="mu2/s"/>

  <Specie name="STIM_4" id="STIM_4" kdiff="0.01" kdiffunit="mu2/s"/>
  <Specie name="STIM_2" id="STIM_2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="STIM_2CaER" id="STIM_2CaER" kdiff="0" kdiffunit="mu2/s"/>
 
  <Reaction name="SOCE1" id="SOCE1">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai3STIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <Product specieID="Ca"/>
    
    <forwardRate>5e-8</forwardRate>
    <reverseRate>5e-8</reverseRate>
  </Reaction>
  <Reaction name="SOCE2" id="SOCE2">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="Orai2STIM_4"/>
    <Product specieID="Orai2STIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-9</forwardRate>
    <reverseRate>1.5e-9</reverseRate>
  </Reaction>

 <Reaction name="SOCE3" id="SOCE3">
    <Reactant specieID="CaOut"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <Product specieID="Ca"/>
    <forwardRate>1.5e-11</forwardRate>
    <reverseRate>1.5e-11</reverseRate>
  </Reaction>
   

  <Reaction name="STIM_dim_1" id="STIM_dim_1">
    <Reactant specieID="STIM_2" power="2"/>
    <Product specieID="STIM_4"/>
    <forwardRate>4.8e-7</forwardRate>
    <reverseRate>11e-5</reverseRate>
  </Reaction>
  

  <Reaction name="STIMCaER_1" id="STIMCaER_1">
    <Reactant specieID="STIM_2"/>
    <Reactant specieID="CaER"/>
    <Product specieID="STIM_2CaER"/>
    <forwardRate>8e-7</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ" id="STIM_PMJ">
    <Reactant specieID="STIM_4"/>
    <Reactant specieID="PMJ"/>
    <Product specieID="PMJ_STIM_4"/>
    <Product specieID="PMJ"/>
    <forwardRate>1.8e-4</forwardRate>
    <reverseRate>3e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_PMJ_Orai" id="STIM_PMJ_Orai">
    <Reactant specieID="Orai"/>
    <Reactant specieID="PMJ_STIM_4"/>
    <Product specieID="OraiSTIM_4"/>
    <forwardRate>1.5e-04</forwardRate>
    <reverseRate>8e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai2" id="STIM_Orai2">
    <Reactant specieID="OraiSTIM_4" power="2"/>
    <Product specieID="Orai2STIM_4"/>
    <forwardRate>3.75e-5</forwardRate>
    <reverseRate>2e-3</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai4" id="STIM_Orai4">
    <Reactant specieID="Orai2STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai3STIM_4"/>
    <forwardRate>9.375e-06</forwardRate>
    <reverseRate>5e-4</reverseRate>
  </Reaction>

  <Reaction name="STIM_Orai8" id="STIM_Orai8">
    <Reactant specieID="Orai3STIM_4"/>
    <Reactant specieID="OraiSTIM_4"/>
    <Product specieID="Orai2STIM_4" power="2"/>
    <forwardRate>9.375e-06</forwardRate>

  </Reaction>

  
<Specie name="NMDA" id="NMDA" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="NMDAOut" id="NMDAOut" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="NMDABuf" id="NMDABuf" kdiff="10" kdiffunit="mu2/s"/>
  <Specie name="NR2BC" id="NR2BC" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NR2BC1" id="NR2BC1" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NR2BC2" id="NR2BC2" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NR2BD" id="NR2BD" kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="NR2BO" id="NR2BO" kdiff="0" kdiffunit="mu2/s"/>
<Reaction name="NR2BC-C1" id="NR2BC-C1">
    <Reactant specieID="NR2BC"/>
    <Reactant specieID="NMDA"/>
    <Product specieID="NR2BC1"/>
    <forwardRate>5e-6</forwardRate>
    <reverseRate>5e-3</reverseRate>
 </Reaction>

  <Reaction name="NR2BC1-C2" id="NR2BC1-C2">
    <Reactant specieID="NR2BC1"/>
    <Reactant specieID="NMDA"/>
    <Product specieID="NR2BC2"/>
    <forwardRate>5e-6</forwardRate>
    <reverseRate>5e-3</reverseRate>
 </Reaction>
   

  <Reaction name="NR2BC2-D" id="NR2BC2-D">
    <Reactant specieID="NR2BC2"/>
    <Product specieID="NR2BD"/>
    <forwardRate>4e-3</forwardRate>
    <reverseRate>0.3e-3</reverseRate>
  </Reaction>

   <Reaction name="NR2BC2-0" id="NR2BC2-0">
    <Reactant specieID="NR2BC2"/>
    <Product specieID="NR2BO"/>
    <forwardRate>10e-3</forwardRate>
    <reverseRate>322e-3</reverseRate>
  </Reaction>

  <Reaction name="NR2B0flux" id="NR2B0flux">
    <Reactant specieID="NR2BO"/>
    <Reactant specieID="CaOut"/>
    <Product specieID="NR2BO"/>
    <Product specieID="Ca"/>
    <forwardRate>2.5e-6</forwardRate>
  </Reaction>


  <Reaction name="NMDA--NMDAOut" id="NMDA--NMDAOut">
    <Reactant specieID="NMDA"/>
    <Product specieID="NMDAOut"/>
  
    <forwardRate>0.5e-2</forwardRate>
    <reverseRate>0.02e-6</reverseRate>
    <Q10>0.2</Q10>
  </Reaction>

  <Reaction name="NMDAOut+NMDABuf--NULL" id="NMDAOut_buf--NULL">
    <Reactant specieID="NMDA"/>
    <Reactant specieID="NMDABuf"/>
    <forwardRate>5e-02</forwardRate>
    <reverseRate>0</reverseRate>
  </Reaction>
    
</ReactionScheme>
